PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = n-back-testing
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Routines
  Routine trial1
    ImageComponent trial1Grid
      image = grid.png
      size = [0.6, 0.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent trial1Square
      fillColor = $[1,1,1]
      pos [set every repeat] = [loc1,loc2]
      shape = rectangle
      size = [0.15,0.15]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent trial1Fix
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent trial1Resp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        This is the end of the experiment.
        Thank you for your time.
  Routine instructions2
    TextComponent instr2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of N-back-1 trials. You are about to start N-back-2 trials. This means that instead of pressing space whenever the square appears in the same position as on the position on one trial before, you are required to press space whenever the square appears in the same position as on the position two trials before. For example if the square appeared in left down corner on trial 1, you should press space if the square appears in the left down corner on trial 3. Press space to continue.
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    KeyboardComponent keyResp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation2
    TextComponent fix2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial2
    ImageComponent trial2Grid
      image = grid.png
      size = [0.6, 0.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent trial2Square
      fillColor = $[1,1,1]
      pos [set every repeat] = [loc1,loc2]
      shape = rectangle
      size = [0.15,0.15]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent trial2Fix
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent trial2Resp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine instructions1
    TextComponent instr1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to press space if the white square appeared in the same location as the location on the last trial. For example if the square was in the left down corner on trial 1 and then it appeared in the same location on trial 2, press space. Otherwise, do not respond. Press space to continue.
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    KeyboardComponent keyResp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation1
    TextComponent fix1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine instructions3
    TextComponent instr3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of N-back-2 trials. You are about to start N-back-3 trials. This means that instead of pressing space whenever the square appears in the same position as on the position on two trials before, you are required to press space whenever the square appears in the same position as on the position three trials before. For example if the square appeared in left down corner on trial 1, you should press space if the square appears in the left down corner on trial 4. Press space to continue.
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    KeyboardComponent keyResp3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial3
    ImageComponent trial3Grid
      image = grid.png
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent trial3Square
      fillColor = $[1,1,1]
      pos [set every repeat] = [loc1,loc2]
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent trial3Fix
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent trial3Resp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine fixation3
    TextComponent fix3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  Routine instructions1
  Routine fixation1
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = nBackCond1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('square', 6), ('loc1', 0.2), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 6), ('loc1', 0.2), ('loc2', 0.0), ('corrAns', 'space')]),
      OrderedDict([('square', 2), ('loc1', 0.0), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 9), ('loc1', 0.2), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 9), ('loc1', 0.2), ('loc2', -0.2), ('corrAns', 'space')]),
      OrderedDict([('square', 6), ('loc1', 0.2), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 4), ('loc1', -0.2), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 3), ('loc1', 0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 3), ('loc1', 0.2), ('loc2', 0.2), ('corrAns', 'space')]),
      OrderedDict([('square', 8), ('loc1', 0.0), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 1), ('loc1', -0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 2), ('loc1', 0.0), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 4), ('loc1', -0.2), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 4), ('loc1', -0.2), ('loc2', 0.0), ('corrAns', 'space')]),
      OrderedDict([('square', 8), ('loc1', 0.0), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 5), ('loc1', 0.0), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 5), ('loc1', 0.0), ('loc2', 0.0), ('corrAns', 'space')]),
      OrderedDict([('square', 1), ('loc1', -0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 3), ('loc1', 0.2), ('loc2', 0.2), ('corrAns', None)])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
    Routine trial1
  LoopTerminator trials1
  Routine instructions2
  Routine fixation2
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = nBackCond2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('square', 5), ('loc1', 0.0), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 2), ('loc1', 0.0), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 6), ('loc1', 0.2), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 9), ('loc1', 0.2), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 3), ('loc1', 0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 9), ('loc1', 0.2), ('loc2', -0.2), ('corrAns', 'space')]),
      OrderedDict([('square', 7), ('loc1', -0.2), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 1), ('loc1', -0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 5), ('loc1', 0.0), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 7), ('loc1', -0.2), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 5), ('loc1', 0.0), ('loc2', 0.0), ('corrAns', 'space')]),
      OrderedDict([('square', 6), ('loc1', 0.2), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 3), ('loc1', 0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 6), ('loc1', 0.2), ('loc2', 0.0), ('corrAns', 'space')]),
      OrderedDict([('square', 8), ('loc1', 0.0), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 9), ('loc1', 0.2), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 9), ('loc1', 0.2), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 1), ('loc1', -0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 3), ('loc1', 0.2), ('loc2', 0.2), ('corrAns', None)])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
    Routine trial2
  LoopTerminator trials2
  Routine instructions3
  Routine fixation3
  LoopInitiator trials3 loopType="TrialHandler"
    conditionsFile = nBackCond3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('square', 5), ('loc1', 0.0), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 2), ('loc1', 0.0), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 9), ('loc1', -0.2), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 5), ('loc1', 0.0), ('loc2', -0.2), ('corrAns', 'space')]),
      OrderedDict([('square', 3), ('loc1', 0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 9), ('loc1', 0.2), ('loc2', -0.2), ('corrAns', 'space')]),
      OrderedDict([('square', 7), ('loc1', -0.2), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 1), ('loc1', -0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 6), ('loc1', 0.2), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 7), ('loc1', -0.2), ('loc2', -0.2), ('corrAns', 'space')]),
      OrderedDict([('square', 5), ('loc1', 0.0), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 6), ('loc1', 0.2), ('loc2', 0.0), ('corrAns', 'space')]),
      OrderedDict([('square', 3), ('loc1', 0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 1), ('loc1', -0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 8), ('loc1', 0.0), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 9), ('loc1', 0.2), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 1), ('loc1', -0.2), ('loc2', 0.2), ('corrAns', 'space')]),
      OrderedDict([('square', 3), ('loc1', 0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 3), ('loc1', 0.2), ('loc2', 0.2), ('corrAns', None)])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
    Routine trial3
  LoopTerminator trials3
  Routine end
